CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:4281
GitHash:
ModuleCount:@MODULE_COUNT@
HasImagePlaneDetails:False

Images:[module_num:1|svn_version:'Unknown'|variable_revision_number:2|show_window:False|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    :
    Filter images?:Images only
    Select the rule criteria:and (extension does isimage) (directory doesnot containregexp "[\\\\/]\\.")

Metadata:[module_num:2|svn_version:'Unknown'|variable_revision_number:6|show_window:False|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Extract metadata?:No
    Metadata data type:Text
    Metadata types:{}
    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9])_w(?P<ChannelNumber>[0-9])
    Regular expression to extract from folder name:(?P<Date>[0-9]{4}_[0-9]{2}_[0-9]{2})$
    Extract metadata from:All images
    Select the filtering criteria:and (file does contain "")
    Metadata file location:Elsewhere...|
    Match file and image metadata:[]
    Use case insensitive matching?:No
    Metadata file name:None
    Does cached metadata exist?:No

NamesAndTypes:[module_num:3|svn_version:'Unknown'|variable_revision_number:8|show_window:False|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Assign a name to:Images matching rules
    Select the image type:Grayscale image
    Name to assign these images:DNA
    Match metadata:[]
    Image set matching method:Order
    Set intensity range from:Image metadata
    Assignments count:@ASSIGNMENT_COUNT@
    Single images count:0
    Maximum intensity:255.0
    Process as 3D?:No
    Relative pixel spacing in X:1.0
    Relative pixel spacing in Y:1.0
    Relative pixel spacing in Z:1.0
@ASSIGNMENTS@

Groups:[module_num:4|svn_version:'Unknown'|variable_revision_number:2|show_window:False|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Do you want to group your images?:No
    grouping metadata count:1
    Metadata category:None

MeasureObjectIntensity:[module_num:5|svn_version:'Unknown'|variable_revision_number:4|show_window:False|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Select images to measure:@IMAGES@
    Select objects to measure:@OBJECTS@

MeasureObjectSizeShape:[module_num:6|svn_version:'Unknown'|variable_revision_number:3|show_window:False|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Select object sets to measure:@OBJECTS@
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureTexture:[module_num:7|svn_version:'Unknown'|variable_revision_number:7|show_window:False|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Select images to measure:@IMAGES@
    Select objects to measure:@OBJECTS@
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Objects
    Texture scale to measure:3

MeasureColocalization:[module_num:8|svn_version:'Unknown'|variable_revision_number:5|show_window:False|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Select images to measure:@IMAGES@
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Within objects
    Select objects to measure:@OBJECTS@
    Run all metrics?:No
    Calculate correlation and slope metrics?:Yes
    Calculate the Manders coefficients?:Yes
    Calculate the Rank Weighted Colocalization coefficients?:Yes
    Calculate the Overlap coefficients?:Yes
    Calculate the Manders coefficients using Costes auto threshold?:No
    Method for Costes thresholding:Faster

MeasureObjectNeighbors:[module_num:9|svn_version:'Unknown'|variable_revision_number:3|show_window:False|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Select objects to measure:@NEIGHBOR_OBJECT@
    Select neighboring objects to measure:@NEIGHBOR_OBJECT@
    Method to determine neighbors:Adjacent
    Neighbor distance:5
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
    Name the output image:ObjectNeighborCount
    Select colormap:Blues
    Retain the image of objects colored by percent of touching pixels?:No
    Name the output image:PercentTouching
    Select colormap:Oranges

ExportToSpreadsheet:[module_num:10|svn_version:'Unknown'|variable_revision_number:13|show_window:False|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
    Select source of sample row name:Metadata
    Select the image to use as the identifier:None
    Select the metadata to use as the identifier:None
    Export all measurement types?:Yes
    Press button to select measurements:
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
    Data to export:Do not use
    Combine these object measurements with those of the previous object?:No
    File name:DATA.csv
    Use the object name for the file name?:Yes
